PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/sub_%s_%s_%s' % (expInfo['sub_num'], expInfo['name'], expInfo['date'])
  Experiment info = {'name': 'Xia Xiaokai', 'sub_num': '01', 'group': "['A','B','C','D']"}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1512, 982]
  color = $[-1.0000, -1.0000, -1.0000]
  expName = PC_spatial_stroop
  exportHTML = manually
  keyboardBackend = ioHub
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Routines
  Routine fixation
    ImageComponent fixation_image
      image = material/fixation.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine stim
    CodeComponent response_code
      Code Type = Both
      Begin JS Routine:
        target_clock = new util.Clock();
        target_begin = target_clock.getTime();
      Begin Routine:
        target_clock = core.Clock()
        target_begin = target_clock.getTime()
      End JS Routine:
        if (stim_resp.corr) {
            totalaccuracy = (totalaccuracy + 1);
        } else {
            errorsset = (errorsset + 1);
        }
        psychoJS.experiment.addData("errorsset", errorsset);
        psychoJS.experiment.addData("totalaccuracy", totalaccuracy);
      End Routine:
        if stim_resp.corr:
            totalaccuracy=totalaccuracy+1
        else:
            errorsset=errorsset+1
        thisExp.addData('errorsset', errorsset)
        thisExp.addData('totalaccuracy', totalaccuracy)
    ImageComponent stim_image
      image [set every repeat] = $stim_image_loc
      size = (1.3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    KeyboardComponent stim_resp
      allowedKeys = '1','4'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      store = first key
      storeCorrect = True
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  Routine ITI
    CodeComponent iti_code
      Code Type = Auto->JS
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      Begin Routine:
        iti_duration = 1.6 - (target_clock.getTime() - target_begin)
    TextComponent ITI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine short_rest
    ImageComponent short_rest_image
      image = material/short_rest.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $short_rest_duration
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  Routine rest_end
    ImageComponent rest_end_image
      image = material/end_rest.jpg
      size = (1.3,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stop_rest_duration
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    KeyboardComponent rest_end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stop_rest_duration
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    CodeComponent reset_jitter_code
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(jitter_list)
        count_num = 0
  Routine long_rest
    ImageComponent long_rest_image
      image = material/long_rest.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $long_rest_duration
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    KeyboardComponent recieve_trigger_long_rest
      allowedKeys = 's'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $long_rest_duration
      store = all keys
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  Routine intro
    ImageComponent intro_image
      image = material/intro.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_val
      Code Type = Auto->JS
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      Before Experiment:
        totalaccuracy = 0
        errorsset = 0
  Routine judge
    CodeComponent judege_code
      Code Type = Auto->JS
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      Begin Routine:
        msg = "练习结束, \n你的正确率为" + str((totalaccuracy / 16) * 100) + "%" + "\n请按空格键开始实验!"
      End Routine:
        totalaccuracy = 0
        errorsset = 0
    TextComponent judge_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent judge_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_exp
    ImageComponent end_exp_image
      image = material/end_exp.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine long_rest_end
    ImageComponent long_rest_end_image
      image = material/end_rest.jpg
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent long_rest_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitter
    CodeComponent jitter_code
      Code Type = Auto->JS
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      Begin Routine:
        jitter_duration = jitter_list[count_num]
        thisExp.addData('count_num', count_num)
        count_num = count_num + 1
        thisExp.addData('jitter', jitter_duration)
    TextComponent jitter_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
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    KeyboardComponent recieve_trigger_jitter
      allowedKeys = 's'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
      store = all keys
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  Routine wait_fmri
    TextComponent wait_fmri_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for begin...
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    KeyboardComponent wait_fmri_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine three
    TextComponent three_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 3
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    KeyboardComponent three_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine two
    TextComponent two_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent two_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine one
    TextComponent one_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 1
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    KeyboardComponent one_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitter_practice
    TextComponent jitter_practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine reset_jitter
    CodeComponent reset_jitter_code_2
      Code Type = Auto->JS
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      Begin Routine:
        jitter_list = [1.8,1.8,2.05,2.05,2.3,2.3,2.3,2.3,2.3,2.55,2.55,2.55,2.55,2.55,2.55,2.8,2.8,2.8,2.8,2.8,2.8,2.8,2.8,2.8,2.8,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05,3.05]
        shuffle(jitter_list)
        thisExp.addData('jitter_list', jitter_list)
        count_num = 0
Flow
  Routine intro
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = seq/trial/exercise.csv
    loopType = fullRandom
    nReps = 4
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    conditions:
      [OrderedDict([('stim_image_loc', 'material/top-shang.png'), ('corr_resp', 'lshift'), ('congruency', 'con')]),
      OrderedDict([('stim_image_loc', 'material/bottom-xia.png'), ('corr_resp', 'rshift'), ('congruency', 'con')]),
      OrderedDict([('stim_image_loc', 'material/bottom-shang.png'), ('corr_resp', 'lshift'), ('congruency', 'inc')]),
      OrderedDict([('stim_image_loc', 'material/top-xia.png'), ('corr_resp', 'rshift'), ('congruency', 'inc')])]
    Routine fixation
    Routine stim
    Routine ITI
    Routine jitter_practice
  LoopTerminator practice_trials
  Routine judge
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = $'seq/run/run_'+str(expInfo['group'])+'.csv'
    loopType = sequential
    nReps = 1
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    Routine wait_fmri
    Routine three
    Routine two
    Routine one
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = $block_seq
      loopType = sequential
      nReps = 1
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      Routine reset_jitter
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $seqfile
        loopType = fullRandom
        nReps = 4
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        Routine fixation
        Routine stim
        Routine ITI
        Routine jitter
      LoopTerminator trials
    LoopTerminator blocks
    Routine long_rest
    Routine long_rest_end
  LoopTerminator runs
  Routine end_exp
